PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'duration_secs': '[60, 30, 15, 10, 5]', 'debug': "['off', 'on']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/gift-box.png', 'resources/slide-1.png', 'resources/slide-2.png', 'resources/slide-3.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = glitter-box
  keyboardBackend = ioHub
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Routines
  Routine begin
    CodeComponent begin_code
      Code Type = Auto->JS
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      Begin Experiment:
        expVersion = "2023.04.27"

        SHOW_DEBUG = expInfo["debug"] == "on"
        THRESH_SECS = int(expInfo["duration_secs"])

        SLIDES_DIR = "resources"

        # Slides: 1920(1919) x 1080
        SLIDE_W_1 = 1.4
        SLIDE_SIZE_1 = (SLIDE_W_1, SLIDE_W_1 / 1920 * 1080)
        SLIDE_W_2 = 1.6
        SLIDE_SIZE_2 = (SLIDE_W_2, SLIDE_W_2 / 1920 * 1080)
        SLIDE_1 = make_slide("slide-1", (0, 0), SLIDE_SIZE_1)
        SLIDE_2 = make_slide("slide-2", (0, 0), SLIDE_SIZE_1)
        SLIDE_3 = make_slide("slide-3", (0, 0), SLIDE_SIZE_2)

        # Gift box: 690 x 652
        BOX_W = 0.5
        BOX_SIZE = (BOX_W, BOX_W / 690 * 652)
        BOX_POS = (0, -0.12)
        BOX = make_img("gift-box", "resources/gift-box.png", BOX_POS, BOX_SIZE, 1)

        # Continue button
        NEXT = make_button("continue", "Continue", (0.6, -0.35), (0.25, 0.1))

        # Global mouse
        MOUSE = core.Mouse(win=win)
        MOUSE_L = 0
        MOUSE_L_prev = 0
      Begin Routine:
        SLIDE_1.autoDraw = True
        BOX.autoDraw = True
        NEXT.autoDraw = True

        START_T = None
        END_T = None
        NEXT_SLIDE = True

        x = 0
        y = 0
        coords_x = []
        coords_y = []
        coords_t = []
        coords_inbox = []
      Each Frame:
        if NEXT_SLIDE and t - START_T > THRESH_SECS:
            NEXT_SLIDE = False
            SLIDE_1.autoDraw = False
            SLIDE_2.autoDraw = True
            BOX.autoDraw = False
            BOX.autoDraw = True

        MOUSE_L = MOUSE.getPressed()[0]
        if MOUSE_L_prev != MOUSE_L:
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L:
                if START_T is None:
                    if NEXT.contains(MOUSE):
                        START_T = t
                        NEXT.autoDraw = False
                elif END_T is None:
                    if t - START_T > THRESH_SECS:
                        if BOX.contains(MOUSE):
                            END_T = t
                            BOX.autoDraw = False
                            SLIDE_2.autoDraw = False
                            SLIDE_3.autoDraw = True
                    else:
                        x, y = MOUSE.getPos()
                        coords_x.append(round_dp(x))
                        coords_y.append(round_dp(y))
                        coords_t.append(round_dp(t - START_T))
                        coords_inbox.append(BOX.contains(MOUSE))
                elif t - END_T > 1:
                    continueRoutine = False

        if SHOW_DEBUG:
            begin_text.text = f"""
        t = {round(t, 3)}
        frameN = {frameN}
        START_T = {round(START_T, 3)}
        end-by = {round(THRESH_SECS + START_T, 3)}
        coords_x = {coords_x}
        coords_y = {coords_y}
        coords_t = {coords_t}
        coords_inbox = {coords_inbox}
        """
      End Routine:
        thisExp.addData("expVersion", expVersion)

        thisExp.addData("n_screentaps", len(coords_x))

        # Position tracking
        thisExp.addData("coords_x", coords_x)
        thisExp.addData("coords_y", coords_y)
        thisExp.addData("coords_t", coords_t)
        thisExp.addData("coords_inbox", coords_inbox)
    CodeComponent functions_g
      Code Type = Auto->JS
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      Before Experiment:
        def make_button(name, text, pos, size):
            return visual.ButtonStim(
                win=win,
                text=text,
                pos=pos,
                letterHeight=0.04,
                size=size,
                borderWidth=0.005,
                fillColor="lightgrey",
                borderColor="darkgrey",
                color="black",
                colorSpace="rgb",
                opacity=None,
                bold=True,
                italic=False,
                padding=None,
                anchor="center",
                name=name
            )

        def make_img(name, file_name, pos, size, opacity):
            return visual.ImageStim(
                win=win,
                name=name,
                image=file_name,
                pos=pos,
                size=size,
                opacity=opacity
            )

        def make_slide(name, pos=(0, 0), size=SLIDE_SIZE):
            return make_img(
                name,
                f"{SLIDES_DIR}/{name}.png",
                pos, size, 1
            )

        def round_dp(x, dp=5):
            num, = (10 ** dp),
            return round(x * num) / num
    TextComponent begin_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine begin
